<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="ChunkFile" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName />
        <io:ScanPattern>%s,%i,%i</io:ScanPattern>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>ProcessChunk</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>ChunkParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkParameters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" Selector="Item1" />
                <Property Name="StartPosition" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName />
                <cv:PlaybackRate>1000</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="VideoFile" />
        <Property Name="FrameRate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName />
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>