<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="OutFile" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>OutFile</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="ChunkFile" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName />
        <io:ScanPattern>%i,%i,%s</io:ScanPattern>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>ProcessChunk</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>ChunkParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="StartPosition" Selector="Item1" />
                <Property Name="FileName" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName />
                <cv:PlaybackRate>1000</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>128</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="15" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OutFile</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}.csv</Format>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OutFile</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}.avi</Format>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FrameRate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName />
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>